PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = contrast
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Routines
  Routine trial
    PolygonComponent patch_background
      fillColor = $[1,1,1]
      pos = (-300, 0)
      shape = rectangle
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent patch_foreground
      fillColor = $[.5,.5,.5]
      lineColor = $[.5,.5,.5]
      pos = (-300, 0)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent patch_test
      fillColor [set every repeat] = $[rgb_luminance,rgb_luminance,rgb_luminance]
      lineColor [set every repeat] = $[rgb_luminance,rgb_luminance,rgb_luminance]
      pos = (300, 0)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent text_task
      color = $[0,0,0]
      letterHeight = 0.03
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = select brighter patch
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  Routine gap
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = .
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  Routine instruction
    TextComponent text_instruction
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this experiment,

        ...
        ...


        Press [space] to start
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bye
    TextComponent text_bye
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Experiment is over

        THANK YOU!
    KeyboardComponent key_resp_bye
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = nothing
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = design.xlsx
    loopType = random
    nReps = 30
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    conditions:
      [OrderedDict([('rgb_luminance', 0.0)]),
      OrderedDict([('rgb_luminance', 0.05)]),
      OrderedDict([('rgb_luminance', 0.1)]),
      OrderedDict([('rgb_luminance', 0.15)]),
      OrderedDict([('rgb_luminance', 0.2)]),
      OrderedDict([('rgb_luminance', 0.25)]),
      OrderedDict([('rgb_luminance', 0.3)]),
      OrderedDict([('rgb_luminance', 0.35)]),
      OrderedDict([('rgb_luminance', 0.4)]),
      OrderedDict([('rgb_luminance', 0.45)]),
      OrderedDict([('rgb_luminance', 0.5)]),
      OrderedDict([('rgb_luminance', 0.55)]),
      OrderedDict([('rgb_luminance', 0.6)]),
      OrderedDict([('rgb_luminance', 0.65)]),
      OrderedDict([('rgb_luminance', 0.7)]),
      OrderedDict([('rgb_luminance', 0.75)]),
      OrderedDict([('rgb_luminance', 0.8)]),
      OrderedDict([('rgb_luminance', 0.85)]),
      OrderedDict([('rgb_luminance', 0.9)]),
      OrderedDict([('rgb_luminance', 0.95)]),
      OrderedDict([('rgb_luminance', 1.0)])]
    Routine trial
    Routine gap
  LoopTerminator trials
  Routine bye
